{
  "actions": {
    "acqdatetime": {
      "filters": {
      	"datetime_filter": {
      		"PatientName": "CIRSEDP_PETCT^CIRSEDP_PETCT",
        	"ImageType": "['ORIGINAL', 'PRIMARY', 'AXIAL']"
        	},
        "datetime_filter_partial": {
      		"PatientName": "CIRS",
        	"ImageType": "['ORIGINAL', 'PRIMARY', 'AXIAL'"
        	}
      	},
      "params": {
      }
    },
    "analysis": {
    	"filters": {
	    	"ct_series_type": "['ORIGINAL', 'PRIMARY', 'AXIAL']"
    	},
    	"params": {
    	}
    }
  },
  "cfgformat": "20221017",
  "comments": {
    "author": "Tim Schakel, UMCU",
    "description": "WADQC 2 module to analyze CT CIRS",
    "version": "0.1",
    "params": {
      "datetime_series_description": "REQUIRED. Series description for retreiving datetime"
    }
  }
}
